PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = pilot_study
  exportHTML = on Save
  keyboardBackend = PsychToolbox
  measureFrameRate = False
  runMode = 0
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Routines
  Routine WelcomeScreen
    RoutineSettingsComponent WelcomeScreen
      saveStartStop = False
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    TextComponent welcome_message
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Hello, Welcome the Image Matching study conducted by the VIDAR lab.

        In this study, you will be given a query image of a hotel room, and six similar images. Your task is to select the image that is a match to the query image.

        Press 'SPACE' to continue.
    KeyboardComponent next_key
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine image_matching_1
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    ImageComponent top_left_img
      image [set every repeat] = $all_matches[0]
      pos = (-0.35, -0.05)
      size [set every repeat] = [all_w[0], all_h[0]]
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent top_mid_img
      image [set every repeat] = $all_matches[1]
      pos = (0, -0.05)
      size [set every repeat] = [all_w[1], all_h[1]]
      startVal [time (s)] = 0
      units = height
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    ImageComponent top_right_img
      image [set every repeat] = $all_matches[2]
      pos = (0.35, -0.05)
      size [set every repeat] = [all_w[2], all_h[2]]
      startVal [time (s)] = 0
      units = height
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    ImageComponent bott_right_img
      image [set every repeat] = $all_matches[3]
      pos = (0.35, -0.35)
      size [set every repeat] = [all_w[3], all_h[3]]
      startVal [time (s)] = 0
      units = height
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    ImageComponent bott_mid_img
      draggable = True
      image [set every repeat] = $all_matches[4]
      pos = (0, -0.35)
      size [set every repeat] = [all_w[4], all_h[4]]
      startVal [time (s)] = 0
      units = height
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    ImageComponent bott_left_img
      image [set every repeat] = $all_matches[5]
      pos = (-0.35, -0.35)
      size [set every repeat] = [all_w[5], all_h[5]]
      startVal [time (s)] = 0
      units = height
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    MouseComponent selecting_img_mouse
      clickable = top_left_img, top_mid_img, top_right_img, bott_right_img, bott_mid_img, bott_left_img
      correctAns = bott_left_img
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0
      storeCorrect = True
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    ImageComponent ref_img
      image [set every repeat] = $query_img
      pos = (0, 0.35)
      size [set every repeat] = $[query_w, query_h]
      startVal [time (s)] = 0
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  Routine consent
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    TextComponent ask_consent
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Now that you understand what will be expected from you as well as what data will be collected, do you consent? (y/n)
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    KeyboardComponent consent_key
      allowedKeys = 'y','n'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Both
      Each Frame:
        if(consent_key.keys == 'n' or consent_key.keys == str('n')):
            return quit
      Each JS Frame:
        //check if unconsented
        if(consent_key.keys === 'n' || consent_key.keys === String("n")){
          return quitPsychoJS('Unconsented through pressing the [n] key. Goodbye!', false);
        }
  Routine EndScreen
    RoutineSettingsComponent EndScreen
      saveStartStop = False
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    TextComponent end_message
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Thank you for completing!

        Please wait while we save your results...
    CodeComponent DataPipe_Link
      Code Type = JS
      Begin JS Routine:
        // Prevent default browser CSV download
        //psychoJS._saveResults = 0;

        // Generate filename for results
        let filename = psychoJS._experiment._experimentName + '_' + psychoJS._experiment._datetime + '.csv';

        // Extract data object from experiment
        let dataObj = psychoJS._experiment._trialsData;

        // Convert data object to CSV
        let data = [Object.keys(dataObj[0])].concat(dataObj).map(it => {
            return Object.values(it).toString()
        }).join('\n')

        // Send data to OSF via DataPipe
        console.log('Saving data...')
        fetch('https://pipe.jspsych.org/api/data', {
            method: 'POST',
            headers: {
                'Content-Type': 'application/json',
                Accept: '*/*',
            },
            body: JSON.stringify({
                experimentID: 'DLFoEuJu8PX1',
                filename: filename,
                data: data,
            }),
        }).then(response => response.json()).then(data => {
            // Log response and force experiment end
            console.log(data);
            quitPsychoJS();
        })
  Routine blank_holder
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine difficulty_type
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  Routine coding_instantiate
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        num_trials  = 5
        num_matches = 6

        curr_sprdsht =
  Routine coding_outer_loop
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    CodeComponent outer_loop_Py_code
      Code Type = Auto->JS
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      Begin Experiment:
        import random, openpyxl

        #making the algorithm to determine random numbers
        #random as well
        random.seed()

        #the number of spreadsheets that is possible for the
        #outer loop to load in.
        num_sprdsht = 2

        #spreadsheet to be loaded in by outer loop
        sprdsht_to_load = "C:/Users/Salwa/Desktop/GIT CODES/colorStudyPilot/resources/image_match.xlsx"
      Begin Routine:
        #the spreadsheet used to determine the current difficulty
        outer_sprdsht = openpyxl.load_workbook(sprdsht_to_load)

        image_matching_difficulty = "..."

        #get the first sheet bc I only ever make 1 sheet workbooks
        sprdsht_1_sheet = outer_sprdsht.active

        #indices of the excel sheet alr visited, and ones tbv
        visited_outer_sprdsht = []
        to_be_visited_outer_sprdsht = []

        for num_sprdsht in range(2, num_sprdsht+1):
            #for each row in the spreadsheet, starting from below
            #the header...append the indices
            to_be_visited_outer_sprdsht.append(num_sprdsht)

        #shuffle the indices so they're now in random order
        random.shuffle(to_be_visited_outer_sprdsht)

        #the current spreadsheet is the first index of the indices
        #to be visited in the possible spreadsheets to be visited
        curr_inner_sprdsht = (sprdsht_1_sheet.cell(row=to_be_visited_outer_sprdsht[0], column=1)).value
      End Routine:
        if "easy" not in curr_inner_sprdsht:
            image_matching_difficulty.replace("...", "hard")
        else:
            image_matching_difficulty.replace("...", "easy")

        thisExp.addData("current_difficulty", image_matching_difficulty)

        #add the index in the first element of the tbv to alr visited
        #and remove it from tbv
        visited_outer_sprdsht.append(to_be_visited_outer_sprdsht.pop(0))
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $image_matching_difficulty
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  Routine coding_inner_loop
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    CodeComponent inner_loop_Py_code
      Code Type = Auto->JS
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      Begin Experiment:
        import random, openpyxl

        #randomizing the algoirthm for random
        random.seed()

        #number of image matches, including correct match
        num_total_matches = 8

        #number of matches you want to appear
        num_actual_matches = 6

        #number of sets
        num_sets = 5

        #counter for current set which determines which row
        #we will randomize and show. i.e. image[curr_set]
        curr_set = 0
      Begin Routine:
        #curr_inner_sprdsht is the current spreadsheet this inner
        #loop will use based on the outer loop.


        sprdsht = spreadsheet_to_match

        #open the inner spreadsheet and use its first sheet
        inner_sprdsht = openpyxl.load_workbook(sprdsht)
        inner_in_sheet = inner_sprdsht.active

        query_img = []
        query_w = []
        query_h = []

        correct_img = []
        correct_w = []
        correct_h = []

        poss_matches = []
        match_w = []
        match_h = []

        total_matches = [[0]*7 for i in range(num_sets)]
        total_w = [[0]*7 for i in range(num_sets)]
        total_h = [[0]*7 for i in range(num_sets)]

        for curr_row in range(2, num_sets+1):
            #starts at row1 column1, header is row1
            #for each set aka row, append the query and correct

            query_img.append(inner_in_sheet.cell(row=curr_row, column=1).value)
            query_w.append(inner_in_sheet.cell(row=curr_row, column=4).value)
            query_h.append(inner_in_sheet.cell(row=curr_row, column=5).value)

            correct_img.append(inner_in_sheet.cell(row=curr_row, column=6).value)
            correct_w.append(inner_in_sheet.cell(row=curr_row, column=9).value)
            correct_h.append(inner_in_sheet.cell(row=curr_row, column=10).value)

            for curr_col in range(11, 41):
                #my excel sheet has 45 columns supposedly
                #each poss_match is a possible match in the excel sheet
                #for the same set/task
                poss_matches.append(inner_in_sheet.cell(row=curr_row, column=curr_col).value)
                match_w.append(inner_in_sheet.cell(row=curr_row+3, column=curr_col).value)
                match_h.append(inner_in_sheet.cell(row=curr_row+4, column=curr_col).value)

            #the total poss_matches of each row are 1 element
            #[set][col]
            total_matches[curr_row-2] = poss_matches.copy()
            total_w[curr_row-2] = match_w.copy()
            total_h[curr_row-2] = match_h.copy()

            #clearing so the lists are empty for the next row/set
            poss_matches.clear()
            match_w.clear()
            match_h.clear()
            #7 total possible matches, shuffle their index
        img_order = [0, 1, 2, 3, 4, 5, 6]
        random.shuffle(img_order)

        #determine the correct image's location randomly, between 6 available
        #spots
        corr_loc = random.randint(0, 5)

        #each image and its pos will be accessed by all_matches[curr_set]
        #where i is matches 1-5, will generate the randomly placed image
        #7354261, 3, 735corr42
        all_matches = []
        all_w = []
        all_h = []

        for correcting_match_loc in range(0, 5):
            #for 6 empty spots, if the index is the one the correct image needs
            #to be in, add it there, otherwise, add the match
            if correcting_match_loc == corr_loc:
                all_matches.append(correct_img[curr_set])
                all_w.append(correct_w[curr_set])
                all_h.append(correct_h[curr_set])
            else:
                all_matches.append(total_matches[curr_set][img_order[correcting_match_loc]])
                all_w.append(total_w[curr_set][img_order[correcting_match_loc]])
                all_h.append(total_h[curr_set][img_order[correcting_match_loc]])
      End Routine:
        thisExp.addData("query", query_img[curr_set])
        thisExp.addData("corr_ans", correct_img[curr_set])

        for total_cols in range(0, 5):
            #for each column/match out of 0-4, iterate and add
            #the image at the current set through all the columns
            thisExp.addData("match"+str(curr_set+1), total_matches[curr_set][total_cols])

        #increment set counter for loop
        curr_set += 1
Flow
  Routine WelcomeScreen
  Routine consent
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = resources/image_match.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'spreadsheet_to_match': 'C:/Users/Salwa/Desktop/GIT CODES/colorStudyPilot/resources/image_match_easy.xlsx'},
      {'spreadsheet_to_match': 'C:/Users/Salwa/Desktop/GIT CODES/colorStudyPilot/resources/image_match_hard.xlsx'}]
    Routine coding_inner_loop
    LoopInitiator matching_difficulty loopType="TrialHandler"
      loopType = random
      nReps = num_sets
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      conditions:
        [{'query': 'resources/images/easy/000015787.jpg', 'query_og_w': 1024, 'query_og_h': 768, 'query_targ_w': 0.3, 'query_targ_h': 0.22499999999999998, 'correct': 'resources/images/easy/000015788.jpg', 'correct_og_w': 1024, 'correct_og_h': 768, 'correct_targ_w': 0.3, 'correct_targ_h': 0.22499999999999998, 'match1': 'resources/images/easy/15787_1.jpg', 'match1_og_w': 1024, 'match1_og_h': 768, 'match1_targ_w': 0.3, 'match1_targ_h': 0.22499999999999998, 'match2': 'resources/images/easy/15787_2.jpg', 'match2_og_w': 350, 'match2_og_h': 233, 'match2_targ_w': 0.3, 'match2_targ_h': 0.1997142857142857, 'mat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,
        {'query': 'resources/images/easy/000044290.jpg', 'query_og_w': 2160, 'query_og_h': 3840, 'query_targ_w': 0.16875, 'query_targ_h': 0.3, 'correct': 'resources/images/easy/000044276.jpg', 'correct_og_w': 1920, 'correct_og_h': 1080, 'correct_targ_w': 0.3, 'correct_targ_h': 0.16875, 'match1': 'resources/images/easy/44290_1.jpg', 'match1_og_w': 350, 'match1_og_h': 263, 'match1_targ_w': 0.3, 'match1_targ_h': 0.22542857142857142, 'match2': 'resources/images/easy/44290_2.jpg', 'match2_og_w': 350, 'match2_og_h': 280, 'match2_targ_w': 0.3, 'match2_targ_h': 0.24, 'match3': 'resources/images/easy/44290_3.j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,
        {'query': 'resources/images/easy/000000329.jpg', 'query_og_w': 1024, 'query_og_h': 768, 'query_targ_w': 0.3, 'query_targ_h': 0.22499999999999998, 'correct': 'resources/images/easy/000000332.jpg', 'correct_og_w': 1024, 'correct_og_h': 768, 'correct_targ_w': 0.3, 'correct_targ_h': 0.22499999999999998, 'match1': 'resources/images/easy/329_1.jpg', 'match1_og_w': 1024, 'match1_og_h': 768, 'match1_targ_w': 0.3, 'match1_targ_h': 0.22499999999999998, 'match2': 'resources/images/easy/329_2.jpg', 'match2_og_w': 1024, 'match2_og_h': 768, 'match2_targ_w': 0.3, 'match2_targ_h': 0.22499999999999998, 'match3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,
        {'query': 'resources/images/easy/000020829.jpg', 'query_og_w': 768, 'query_og_h': 1024, 'query_targ_w': 0.22499999999999998, 'query_targ_h': 0.3, 'correct': 'resources/images/easy/000020832.jpg', 'correct_og_w': 1024, 'correct_og_h': 768, 'correct_targ_w': 0.3, 'correct_targ_h': 0.22499999999999998, 'match1': 'resources/images/easy/20829_1.jpg', 'match1_og_w': 1024, 'match1_og_h': 768, 'match1_targ_w': 0.3, 'match1_targ_h': 0.22499999999999998, 'match2': 'resources/images/easy/20829_2.jpg', 'match2_og_w': 768, 'match2_og_h': 1024, 'match2_targ_w': 0.22499999999999998, 'match2_targ_h': 0.3, 'ma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
      Routine image_matching_1
      Routine blank_holder
    LoopTerminator matching_difficulty
  LoopTerminator trials
  Routine EndScreen
