PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = pilot_study
  exportHTML = on Save
  keyboardBackend = PsychToolbox
  measureFrameRate = False
  runMode = 1
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Routines
  Routine WelcomeScreen
    RoutineSettingsComponent WelcomeScreen
      saveStartStop = False
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    TextComponent welcome_message
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Hello, Welcome the Image Matching study conducted by the VIDAR lab.

        In this study, you will be given a query image of a hotel room, and six similar images. Your task is to select the image that is a match to the query image.

        Press 'SPACE' to continue.
    KeyboardComponent next_key
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine stealing_its_code_1
    RoutineSettingsComponent stealing_its_code_1
      disabled = True
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    ImageComponent top_left_img
      image = resources/images/image_1.png
      pos = (-0.3, 0)
      startVal [time (s)] = 0
      units = height
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    ImageComponent top_mid_img
      image = resources/images/image_2.png
      startVal [time (s)] = 0
      units = height
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    ImageComponent top_right_img
      image = resources/images/image_3.png
      pos = (0.3, 0)
      startVal [time (s)] = 0
      units = height
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    ImageComponent bott_right_img
      image = resources/images/image_4.png
      pos = (0.3, -0.25)
      startVal [time (s)] = 0
      units = height
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    ImageComponent bott_mid_img
      image = resources/images/image_5.png
      pos = (0, -0.25)
      startVal [time (s)] = 0
      units = height
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    ImageComponent bott_left_img
      image = resources/images/image_6.png
      pos = (-0.3, -0.25)
      startVal [time (s)] = 0
      units = height
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    MouseComponent selecting_img_mouse
      clickable = top_left_img, top_mid_img, top_right_img, bott_right_img, bott_mid_img, bott_left_img
      correctAns = bott_left_img
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0
      storeCorrect = True
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    ImageComponent ref_img
      image = resources/images/image_7.png
      pos = (0, 0.3)
      startVal [time (s)] = 0
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  Routine consent
    RoutineSettingsComponent consent
      disabled = True
      saveStartStop = False
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    TextComponent ask_consent
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Now that you understand what will be expected from you as well as what data will be collected, do you consent? (y/n)
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    KeyboardComponent consent_key
      allowedKeys = 'y','n'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Both
      Each Frame:
        if(consent_key.keys == 'n' or consent_key.keys == str('n')):
            return quit
      Each JS Frame:
        //check if unconsented
        if (consent_key.keys === 'n' || consent_key.keys === String('n')) {
            quitPsychoJS('Unconsented through pressing the [n] key. Goodbye!', false);
        }
  Routine EndScreen
    RoutineSettingsComponent EndScreen
      saveStartStop = False
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    TextComponent end_message
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Thank you for completing!

        Please wait while we save your results...
    CodeComponent DataPipe_Link
      Code Type = JS
      Begin JS Routine:
        // Prevent default browser CSV download
        //psychoJS._saveResults = 0;

        // Generate filename for results
        let filename = psychoJS._experiment._experimentName + '_' + psychoJS._experiment._datetime + '.csv';

        // Extract data object from experiment
        let dataObj = psychoJS._experiment._trialsData;

        // Convert data object to CSV
        let data = [Object.keys(dataObj[0])].concat(dataObj).map(it => {
            return Object.values(it).toString()
        }).join('\n')

        // Send data to OSF via DataPipe
        console.log('Saving data...')
        fetch('https://pipe.jspsych.org/api/data', {
            method: 'POST',
            headers: {
                'Content-Type': 'application/json',
                Accept: '*/*',
            },
            body: JSON.stringify({
                experimentID: 'DLFoEuJu8PX1',
                filename: filename,
                data: data,
            }),
        }).then(response => response.json()).then(data => {
            // Log response and force experiment end
            console.log(data);
            quitPsychoJS();
        })
  Routine medPilot
    ImageComponent M_query
      image [set every repeat] = $img_query
      pos = (0, 0.3)
      saveStartStop = False
      size [set every repeat] = $img_query_disp_w, img_query_disp_h
      startVal [time (s)] = 0.0
      units = height
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    RoutineSettingsComponent medPilot
      saveStartStop = False
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    ImageComponent M_top_left
      image [set every repeat] = $sam_1
      pos [set every repeat] = $pos1_x, pos1_y
      saveStartStop = False
      size [set every repeat] = $sam_1_disp_w, sam_1_disp_h
      startVal [time (s)] = 0.0
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    ImageComponent M_top_mid
      image [set every repeat] = $sam_2
      pos [set every repeat] = $pos2_x, pos2_y
      saveStartStop = False
      size [set every repeat] = $sam_2_disp_w, sam_2_disp_h
      startVal [time (s)] = 0.0
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    ImageComponent M_top_right
      draggable = True
      image [set every repeat] = $sam_3
      pos [set every repeat] = $pos3_x, pos3_y
      saveStartStop = False
      size [set every repeat] = $sam_3_disp_w, sam_3_disp_h
      startVal [time (s)] = 0.0
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    ImageComponent M_bot_left
      image [set every repeat] = $sam_4
      pos [set every repeat] = $pos4_x, pos4_y
      saveStartStop = False
      size [set every repeat] = $sam_4_disp_w, sam_4_disp_h
      startVal [time (s)] = 0.0
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    ImageComponent M_bot_mid
      image [set every repeat] = $sam_5
      pos [set every repeat] = $pos5_x, pos5_y
      saveStartStop = False
      size [set every repeat] = $sam_5_disp_w, sam_5_disp_h
      startVal [time (s)] = 0.0
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    ImageComponent M_bot_right
      image [set every repeat] = $img_targ
      pos [set every repeat] = $pos6_x, pos6_y
      saveStartStop = False
      size [set every repeat] = $targ_disp_w, targ_disp_h
      startVal [time (s)] = 0.0
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    KeyboardComponent key_next_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine WelcomeScreen
  Routine consent
  Routine stealing_its_code_1
  LoopInitiator position_loop loopType="TrialHandler"
    conditionsFile = resources/positions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('pos1_x', np.float64(-0.55)), ('pos1_y', np.float64(-0.35)), ('pos2_x', np.float64(0.0)), ('pos2_y', np.float64(0.0)), ('pos3_x', np.float64(0.55)), ('pos3_y', np.float64(-0.35)), ('pos4_x', np.float64(-0.55)), ('pos4_y', np.float64(0.0)), ('pos5_x', np.float64(0.55)), ('pos5_y', np.float64(0.0)), ('pos6_x', np.float64(0.0)), ('pos6_y', np.float64(-0.35))]),
      OrderedDict([('pos1_x', np.float64(0.55)), ('pos1_y', np.float64(-0.35)), ('pos2_x', np.float64(0.55)), ('pos2_y', np.float64(0.0)), ('pos3_x', np.float64(0.0)), ('pos3_y', np.float64(-0.35)), ('pos4_x', np.float64(-0.55)), ('pos4_y', np.float64(0.0)), ('pos5_x', np.float64(0.0)), ('pos5_y', np.float64(0.0)), ('pos6_x', np.float64(-0.55)), ('pos6_y', np.float64(-0.35))]),
      OrderedDict([('pos1_x', np.float64(0.55)), ('pos1_y', np.float64(0.0)), ('pos2_x', np.float64(0.0)), ('pos2_y', np.float64(-0.35)), ('pos3_x', np.float64(0.55)), ('pos3_y', np.float64(-0.35)), ('pos4_x', np.float64(-0.55)), ('pos4_y', np.float64(0.0)), ('pos5_x', np.float64(0.0)), ('pos5_y', np.float64(0.0)), ('pos6_x', np.float64(-0.55)), ('pos6_y', np.float64(-0.35))]),
      OrderedDict([('pos1_x', np.float64(0.0)), ('pos1_y', np.float64(-0.35)), ('pos2_x', np.float64(-0.55)), ('pos2_y', np.float64(0.0)), ('pos3_x', np.float64(0.55)), ('pos3_y', np.float64(0.0)), ('pos4_x', np.float64(0.55)), ('pos4_y', np.float64(-0.35)), ('pos5_x', np.float64(-0.55)), ('pos5_y', np.float64(-0.35)), ('pos6_x', np.float64(0.0)), ('pos6_y', np.float64(0.0))])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
    LoopInitiator medTrial loopType="TrialHandler"
      conditionsFile = resources/midLoop.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('img_query', 'resources/images/medium/med_Q1.jpg'), ('img_query_w', np.int64(4032)), ('img_query_h', np.int64(3024)), ('img_query_disp_w', np.float64(0.25)), ('img_query_disp_h', np.float64(0.1875)), ('sam_1', 'resources/images/medium/med_S1_1.jpg'), ('sam_1_w', np.int64(768)), ('sam_1_h', np.int64(1024)), ('sam_1_disp_w', np.float64(0.1875)), ('sam_1_disp_h', np.float64(0.25)), ('sam_2', 'resources/images/medium/med_S2_1.jpg'), ('sam_2_w', np.int64(768)), ('sam_2_h', np.int64(1024)), ('sam_2_disp_w', np.float64(0.1875)), ('sam_2_disp_h', np.float64(0.25)), ('sam_3', 'resources/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,
        OrderedDict([('img_query', 'resources/images/medium/med_Q2.jpg'), ('img_query_w', np.int64(1024)), ('img_query_h', np.int64(768)), ('img_query_disp_w', np.float64(0.25)), ('img_query_disp_h', np.float64(0.1875)), ('sam_1', 'resources/images/medium/med_S1_2.jpg'), ('sam_1_w', np.int64(4032)), ('sam_1_h', np.int64(3024)), ('sam_1_disp_w', np.float64(0.25)), ('sam_1_disp_h', np.float64(0.1875)), ('sam_2', 'resources/images/medium/med_S2_2.jpg'), ('sam_2_w', np.int64(250)), ('sam_2_h', np.int64(233)), ('sam_2_disp_w', np.float64(0.25)), ('sam_2_disp_h', np.float64(0.233)), ('sam_3', 'resources/ima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,
        OrderedDict([('img_query', 'resources/images/medium/med_Q3.jpg'), ('img_query_w', np.int64(1024)), ('img_query_h', np.int64(768)), ('img_query_disp_w', np.float64(0.25)), ('img_query_disp_h', np.float64(0.1875)), ('sam_1', 'resources/images/medium/med_S1_3.jpg'), ('sam_1_w', np.int64(4160)), ('sam_1_h', np.int64(2340)), ('sam_1_disp_w', np.float64(0.25)), ('sam_1_disp_h', np.float64(0.140625)), ('sam_2', 'resources/images/medium/med_S2_3.jpg'), ('sam_2_w', np.int64(1024)), ('sam_2_h', np.int64(768)), ('sam_2_disp_w', np.float64(0.25)), ('sam_2_disp_h', np.float64(0.1875)), ('sam_3', 'resources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,
        OrderedDict([('img_query', 'resources/images/medium/med_Q4.jpg'), ('img_query_w', np.int64(768)), ('img_query_h', np.int64(1024)), ('img_query_disp_w', np.float64(0.1875)), ('img_query_disp_h', np.float64(0.25)), ('sam_1', 'resources/images/medium/med_S1_4.jpg'), ('sam_1_w', np.int64(1024)), ('sam_1_h', np.int64(768)), ('sam_1_disp_w', np.float64(0.25)), ('sam_1_disp_h', np.float64(0.1875)), ('sam_2', 'resources/images/medium/med_S2_4.jpg'), ('sam_2_w', np.int64(350)), ('sam_2_h', np.int64(234)), ('sam_2_disp_w', np.float64(0.25)), ('sam_2_disp_h', np.float64(0.167142857)), ('sam_3', 'resource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
      Routine medPilot
    LoopTerminator medTrial
  LoopTerminator position_loop
  Routine EndScreen
